PsychoPy2experiment version="1.84.2"
Settings
  Monitor = testMonitor
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = exp
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    PolygonComponent polygon
      fillColor = $[1,0,0]
      stopVal [duration (s)] = 3
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
      size = (0.5, 0.5)
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    PolygonComponent polygon_2
      fillColor = $[0,1,0]
      stopVal [duration (s)] = 3
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
      size = (0.5, 0.5)
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Flow
  Routine trial
