PsychoPy2experiment version="1.84.2"
Settings
  Monitor = testMonitor
  color = $[-1,-1,-1]
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Experiment info = {u'participant': u''}
  Show info dlg = False
  expName = expDell
  Units = use prefs
  Screen = 1
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Routines
  Routine initi
    PolygonComponent green
      fillColor = $[0,1,0]
      pos = (-0.5, 0)
      lineColor = $[-1.000,-1.000,-1.000]
      startVal [time (s)] = 0.0
      size = (1, 2)
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    MouseComponent mouse
      timeRelativeTo = routine
      forceEndRoutineOnPress = True
      startVal [time (s)] = 0.0
      saveMouseState = on click
    PolygonComponent red
      fillColor = $[1,0,0]
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
      size = (1, 2)
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  Routine correctFeed
    PolygonComponent rewardState
      fillColor = $[0,0,1]
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
      size = (2, 2)
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Flow
  LoopInitiator bigLoop loopType="TrialHandler"
    loopType = random
    nReps = 4
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    Routine initi
    Routine correctFeed
  LoopTerminator bigLoop
