PsychoPy2experiment version="1.82.01"
Settings
  Show mouse = True
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  color = $[-1,-1,-1]
  Window size (pixels) = [1600, 900]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = expInorrect
  Units = use prefs
  Screen = 1
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Routines
  Routine incorrect
    PolygonComponent polygon_4
      fillColor = $[1,0,0]
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      nVertices = 90
      size = [0.5, 0.5]
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    SoundComponent sound_1
      sound = Incorrecto.wav
      stopVal [duration (s)] = 0.9
      startVal [time (s)] = 0.1
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  Routine trial
    PolygonComponent polygon
      fillColor = $[1,0,0]
      pos = [-0.5, 0]
      startVal [time (s)] = 0.0
      size = [0.5, 0.5]
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    PolygonComponent polygon_2
      fillColor = $[0,1,0]
      pos = [0.5, 0]
      startVal [time (s)] = 0.0
      size = [0.5, 0.5]
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    MouseComponent mouse
      timeRelativeTo = routine
      forceEndRoutineOnPress = True
      startVal [time (s)] = 0.0
      saveMouseState = on click
  Routine correct
    PolygonComponent polygon_3
      fillColor = $[0,0,1]
      stopVal [duration (s)] = 1.0
      pos = [-0.4, -0.4]
      startVal [time (s)] = 0.0
      size = [0.8, 0.8]
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    SoundComponent corrSound
      sound = Correcto.wav
      stopVal [duration (s)] = 0.9
      startVal [time (s)] = 0.1
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 8
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    Routine trial
    Routine incorrect
  LoopTerminator trials
