PsychoPy2experiment version="1.79.01"
Settings
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = raspb
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    PolygonComponent polygon
      startVal [time (s)] = 0.0
      size = [0.5, 0.5]
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 1.0
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    PolygonComponent polygon_2
      startVal [time (s)] = 0.0
      size = [0.5, 0.5]
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 1.0
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  Routine correctS
    SoundComponent sound_1
      sound = Correcto.wav
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
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Flow
  Routine trial
  Routine correctS
